---
API: 3
OpenSesame: 4.1.5
Platform: nt
---
set width 640
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 480
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path None
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome True
	run trial_loop True

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad True

define sketchpad new_sketchpad
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="{stimulus}" x=0 y=0 z_index=0

define loop trial_loop
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 stimulus OpenSesame
	setcycle 1 stimulus is
	setcycle 2 stimulus fun
	run new_sequence

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=True text="Welcome to the experiment!<br /><br />Please press any key to start the experiment." x=0 y=0 z_index=0

