---
API: 3
OpenSesame: 4.1.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/steenbergenhvan1/DataspellProjects/experimentation_i_2526/content/solutions"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set background black

define feedback conversion_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Temperature in Fahrenheit: {fah}" x=0 y=0 z_index=0

define form_text_input enter_temperature_celsius
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var cel
	set form_title Title
	set form_question "Enter temperature in Celsius: "
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run enter_temperature_celsius always
	run temperature_conversion always
	run conversion_feedback always

define inline_script temperature_conversion
	set description "Executes Python code"
	set _run "fah = cel*1.8 + 32 # Celsius to Fahrenheit conversion"
	set _prepare ""

