---
API: 3
OpenSesame: 4.1.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Tutorial_gaze_cuing
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/steenbergenhvan1/DataspellProjects/experimentation_i_2526/content/solutions"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define loop Experimental_loop
	set source_file ""
	set source table
	set repeat 8
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	setcycle 0 totalTrials 24
	run block_sequence

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I understand!"
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	You will see an F or H:
	
	- If you see an F, press "z" key
	- If you see an H, press "m" key
	
	Try to be as fast and accurate as possible.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 totalTrials 24
	run block_sequence

define feedback avg_acc_feedback
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Average accuracy: {mymeanacc}" x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 gaze_cue left
	setcycle 0 target_letter F
	setcycle 0 target_pos -0.1
	setcycle 0 dist_pos 0.1
	setcycle 0 correct_response z
	setcycle 1 gaze_cue right
	setcycle 1 target_letter F
	setcycle 1 target_pos -0.1
	setcycle 1 dist_pos 0.1
	setcycle 1 correct_response z
	setcycle 2 gaze_cue left
	setcycle 2 target_letter H
	setcycle 2 target_pos -0.1
	setcycle 2 dist_pos 0.1
	setcycle 2 correct_response m
	setcycle 3 gaze_cue right
	setcycle 3 target_letter H
	setcycle 3 target_pos -0.1
	setcycle 3 dist_pos 0.1
	setcycle 3 correct_response m
	setcycle 4 gaze_cue left
	setcycle 4 target_letter F
	setcycle 4 target_pos 0.1
	setcycle 4 dist_pos -0.1
	setcycle 4 correct_response z
	setcycle 5 gaze_cue right
	setcycle 5 target_letter F
	setcycle 5 target_pos 0.1
	setcycle 5 dist_pos -0.1
	setcycle 5 correct_response z
	setcycle 6 gaze_cue left
	setcycle 6 target_letter H
	setcycle 6 target_pos 0.1
	setcycle 6 dist_pos -0.1
	setcycle 6 correct_response m
	setcycle 7 gaze_cue right
	setcycle 7 target_letter H
	setcycle 7 target_pos 0.1
	setcycle 7 dist_pos -0.1
	setcycle 7 correct_response m
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run trial_init always
	run block_loop always
	run feedback always

define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of experiment"
	__form_text__
	The experiment is finished!
	Click OK to exit.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of practice"
	__form_text__
	The practice phase is over.
	Click on OK to start the actual experiment.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run Practice_loop always
	run end_of_practice always
	run Experimental_loop always
	run end_of_experiment always

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="End of block!<br />Your average response time was {avg_rt} ms.<br />Your accuracy was {acc}%<br />Press any key to continue" x=0 y=0 z_index=0

define sketchpad fixation_dot
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad gaze_cue
	set duration 495
	set description "Displays stimuli"
	draw image center=1 file="gaze_{gaze_cue}.png" scale=1 show_if=always x=0 y=0 z_index=0

define sampler incorrect_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define keyboard_response keyboard_response
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad neutral_gaze
	set duration 745
	set description "Displays stimuli"
	draw image center=1 file="gaze_neutral.png" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	CorrectCounter = CorrectCounter + correct
	mymeanacc = CorrectCounter / TrialNumber 
	__end__
	set _prepare ""

define inline_script new_pos
	set description "Executes Python code"
	set _run ""
	___prepare__
	target_pos = float(var.target_pos)*var.width
	dist_pos = float(var.dist_pos)*var.width
	__end__

define inline_script progress_call
	set description "Executes Python code"
	set _run ""
	___prepare__
	width_progress = 1024/totalTrials * TrialNumber
	__end__

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="gaze_{gaze_cue}.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="{target_letter}" x="{target_pos}" y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=X x="{dist_pos}" y=0 z_index=0
	draw rect color=black fill=0 h=64 penwidth=1 show_if=always w=1024 x=-512 y=-320 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=always w="{width_progress}" x=-512 y=-320 z_index=0

define inline_script trial_counter
	set description "Executes Python code"
	set _run ""
	___prepare__
	TrialNumber = TrialNumber + 1
	# print(TrialNumber)
	__end__

define inline_script trial_init
	set description "Executes Python code"
	set _run ""
	___prepare__
	TrialNumber = 0
	CorrectCounter = 0
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run progress_call True
	run fixation_dot always
	run neutral_gaze always
	run gaze_cue always
	run new_pos always
	run trial_counter always
	run target always
	run keyboard_response always
	run new_inline_script True
	run avg_acc_feedback True
	run incorrect_sound "correct == 0"
	run logger always

