---
API: 3
OpenSesame: 4.1.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "The Ultimatum Game"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/steenbergenhvan1/DataspellProjects/experimentation_i_2526/content/solutions"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#b8b8b8"

define sketchpad AcceptOffer
	set duration 3000
	set description AcceptOffer
	draw rect color=green fill=1 h=192 penwidth=1 show_if=always w=512 x=-256 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The other player accepted your offer!<br />" x=0 y=0 z_index=0

define sketchpad DecisionMe
	set duration 0
	set description "Displays stimuli"
	draw rect color=yellow fill=1 h=256 penwidth=1 show_if=always w=320 x=-416 y=-128 z_index=0
	draw rect color=yellow fill=1 h=256 penwidth=1 show_if=always w=320 x=96 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Offer 1: <br />{O1_Me} for me<br />{O1_You} for the other player" x=-256 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Offer 2: <br />{O2_Me} for me<br />{O2_You} for the other player" x=256 y=0 z_index=0
	draw rect color=black fill=0 h=256 penwidth=5 show_if=always w=320 x=-416 y=-128 z_index=0
	draw rect color=black fill=0 h=256 penwidth=5 show_if=always w=320 x=96 y=-128 z_index=0
	draw rect color=white fill=1 h=64 penwidth=5 show_if=always w=500 x=-256 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please choose your offer (press key 1 or 2)" x=0 y=-224 z_index=0

define sketchpad DecisionMe_feedback1
	set duration 1000
	set description "Displays stimuli"
	draw rect color=yellow fill=1 h=256 penwidth=1 show_if=always w=320 x=-416 y=-128 z_index=0
	draw rect color=yellow fill=1 h=256 penwidth=1 show_if=always w=320 x=96 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Offer 1: <br />{O1_Me} for me<br />{O1_You} for the other player" x=-256 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Offer 2: <br />{O2_Me} for me<br />{O2_You} for the other player" x=256 y=0 z_index=0
	draw rect color=red fill=0 h=256 penwidth=5 show_if=always w=320 x=-416 y=-128 z_index=0
	draw rect color=black fill=0 h=256 penwidth=5 show_if=always w=320 x=96 y=-128 z_index=0
	draw rect color=white fill=1 h=64 penwidth=5 show_if=always w=500 x=-256 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please choose your offer (press key 1 or 2)" x=0 y=-224 z_index=0

define sketchpad DecisionMe_feedback2
	set duration 1000
	set description "Displays stimuli"
	draw rect color=yellow fill=1 h=256 penwidth=1 show_if=always w=320 x=-416 y=-128 z_index=0
	draw rect color=yellow fill=1 h=256 penwidth=1 show_if=always w=320 x=96 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Offer 1: <br />{O1_Me} for me<br />{O1_You} for the other player" x=-256 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Offer 2: <br />{O2_Me} for me<br />{O2_You} for the other player" x=256 y=0 z_index=0
	draw rect color=black fill=0 h=256 penwidth=5 show_if=always w=320 x=-416 y=-128 z_index=0
	draw rect color=red fill=0 h=256 penwidth=5 show_if=always w=320 x=96 y=-128 z_index=0
	draw rect color=white fill=1 h=64 penwidth=5 show_if=always w=500 x=-256 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please choose your offer (press key 1 or 2)" x=0 y=-224 z_index=0

define inline_script Indicate_timer_duration
	set description "Executes Python code"
	set _run "my_timer(30)"
	set _prepare ""

define inline_script JitteredWaitingTime
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	var.jitteredWaiting = random.randint(2500, 10000)
	print(var.jitteredWaiting)
	__end__

define logger LogTrials
	set description "Logs experimental data"
	set auto_log yes

define sketchpad NoResponse
	set duration 3000
	set description RejectOffer
	draw rect color=grey fill=1 h=192 penwidth=1 show_if=always w=512 x=-256 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please respond within the time-limit<br />of 2 seconds. " x=0 y=0 z_index=0

define keyboard_response OfferChoice
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2"

define inline_script OtherDecision
	set description "Executes Python code"
	___run__
	if response == Fair_Offer:
	    choice = choices(decision, weights=(80, 20), k=1)
	elif response == "None":
	    choice = "None"
	else:
	    choice = choices(decision, weights=(25,75), k=1)
	
	print(choice)
	__end__
	___prepare__
	from random import choices
	
	decision = ["Accept", "Reject"]
	__end__

define inline_script Pie_countdown
	set description "Executes Python code"
	___run__
	# arc solution from https://forum.cogsci.nl/discussion/7326/mixing-psychopy-and-canvas-elements
	from openexp._canvas._element.psycho import PsychoElement
	from openexp._canvas._element.element import Element
	from psychopy.visual import Pie
	
	class CustomElement(PsychoElement, Element):
	
	    def __init__(self, canvas, extent=90):
	
	        self._extent = extent
	        super().__init__(canvas)
	
	    def prepare(self):
	
	        self._stim = [
	            #fillColor in rgb values ranging from -1 to 1
	            Pie(win, radius=252, fillColor=[-.5, -.5, -.5 ], start=0, end=0-self._extent),
	        ]
	
	    def show(self):
	
	        if self.visible:
	            for stim in self._stim:
	                stim.draw()
	
	
	# The function below takes the desired duration of the countdown timer as a parameter. 
	# Considering that each step of the timer is only 500 ms, the duration of the countdown is then 
	# doubled to divide the pie into equal portions that correspond to each step.
	
	def my_timer(x):
	    secDuration = x*2
	    for degreescovered in range(360, 0, -360//secDuration):
	        my_canvas = Canvas(penwidth = 1, fill = True, color = u'white')
	    
	    
	        my_canvas.ellipse(-250,-250,500,500,color=u'red')
	        my_canvas['arc'] = CustomElement(my_canvas, extent = degreescovered)
	        my_canvas.show()
	        clock.sleep(500) #wait 500 ms
	__end__
	set _prepare ""

define sketchpad RejectOffer
	set duration 3000
	set description RejectOffer
	draw rect color=red fill=1 h=192 penwidth=1 show_if=always w=512 x=-256 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The other player rejected your offer. <br />Neither of you get anything.<br />" x=0 y=0 z_index=0

define loop WaitForOtherPlayer_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 degreescovered 360
	setcycle 1 degreescovered 288
	setcycle 2 degreescovered 216
	setcycle 3 degreescovered 144
	setcycle 4 degreescovered 72
	run new_sequence

define sketchpad WaitingForOther
	set start_response_interval no
	set reset_variables no
	set duration "[jitteredWaiting]"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Waiting for the response from the other player" x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 O1_Me 5
	setcycle 0 O1_You 5
	setcycle 0 O2_Me 7
	setcycle 0 O2_You 3
	setcycle 0 Fair_Offer 1
	setcycle 1 O1_Me 7
	setcycle 1 O1_You 3
	setcycle 1 O2_Me 5
	setcycle 1 O2_You 5
	setcycle 1 Fair_Offer 2
	run trial_sequence

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run instructions always
	run block_loop always

define sketchpad instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="In this game, you have to decide how to share 10 euro's between you and another participant who participates over the internet. <br /><br />You will be presented with two choices: you can make a fair offer (both get 5 euro) or you can make an unfair offer (you get 7 euro's, the other participant gets 3 euro's. <br /><br />Importantly, the other participant then decides whether to accept or reject the offer. If the other participant rejects the offer, you both get nothing. If the other participant accepts the offer, you will get the money in the way that you proposed in the offer. " x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Press space to continue" x=0 y=320 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	# arc solution from https://forum.cogsci.nl/discussion/7326/mixing-psychopy-and-canvas-elements
	from openexp._canvas._element.psycho import PsychoElement
	from openexp._canvas._element.element import Element
	from psychopy.visual import Pie
	
	class CustomElement(PsychoElement, Element):
	
	    def __init__(self, canvas, extent=90):
	
	        self._extent = extent
	        super().__init__(canvas)
	
	    def prepare(self):
	
	        self._stim = [
	            #fillColor in rgb values ranging from -1 to 1
	            Pie(win, radius=252, fillColor=[-.5, -.5, -.5 ], start=0, end=0-self._extent),
	        ]
	
	    def show(self):
	
	        if self.visible:
	            for stim in self._stim:
	                stim.draw()
	
	
	my_canvas = Canvas(penwidth = 1, fill = True, color = u'white')
	
	
	my_canvas.ellipse(-250,-250,500,500,color=u'red')
	my_canvas['arc'] = CustomElement(my_canvas, extent = degreescovered)
	my_canvas.ellipse(-200,-200,400,400,color=u'white')
	my_canvas.show()
	clock.sleep(1000) #wait 1000 ms
	__end__
	set _prepare ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script True

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run DecisionMe always
	run OfferChoice always
	run DecisionMe_feedback1 "response == 1"
	run DecisionMe_feedback2 "response == 2"
	run OtherDecision always
	run JitteredWaitingTime always
	run Pie_countdown True
	run Indicate_timer_duration True
	run AcceptOffer "choice == ['Accept']"
	run RejectOffer "choice == ['Reject']"
	run NoResponse "choice == 'None'"
	run LogTrials always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Welcome to the Ultimatum Game. " x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Press space to continue" x=0 y=320 z_index=0

